PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['visit'])
  Experiment info = {'participant': '', 'visit': '001/002'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = BART
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Each Frame:
        thisBalloonEarnings=nPumps*0.01
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
    CodeComponent setBalloonSize
      Code Type = Auto->JS
      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    ImageComponent balloonBody
      image = blueBalloon.png
      ori = 270
      pos [set every frame] = $[0, -.5+balloonSize/2]
      size [set every frame] = $balloonSize
      startVal [time (s)] = 0.0
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    TextComponent reminderMsg
      letterHeight = 0.05
      pos = [.5, .8]
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to pump the balloon
        Press ENTER to collect this sum
    TextComponent balloonValMsg
      disabled = True
      letterHeight = 0.1
      pos = [.5,0.05]
      startVal [time (s)] = 0.0
      text [set every frame] = $u"This balloon value:\n $%.2f" %thisBalloonEarnings
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    TextComponent bankedMsg
      letterHeight = 0.1
      pos = [-.5, 0.8]
      startVal [time (s)] = 0.0
      text [set every frame] = $"You have collected:\n $%.2f" %bankedEarnings
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    CodeComponent checkKeys
      Code Type = Auto->JS
      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    KeyboardComponent bankButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finalScore
    TextComponent finalScore_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Congratulations!\nYou have earned $%.2f.\nPlease let the experimenter know that you have finished this part." %bankedEarnings
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    KeyboardComponent doneKey
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        display_value = 0
        #from psychopy import sound
        #bang = sound.Sound("bang_22050Hz.wav")
        #coin = sound.Sound("coin_22050Hz.wav")
      Begin Routine:
        display_value = 0
        if popped==True:
            feedbackText="Oops! Lost that one!"
        else:
            feedbackText="You collected $%.2f." %display_value
      Each Frame:
        if popped==False:
            if display_value < lastBalloonEarnings:
                display_value = 0.01 + display_value
                feedbackText="You collected $%.2f." %display_value
            else:
                coin_sound.stop()
                feedbackText="You collected $%.2f." %lastBalloonEarnings

        if t >= 2.5:
            continueRoutine = False
    TextComponent feedbackMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $feedbackText
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    SoundComponent bang_sound
      sound [set every repeat] = bang_22050Hz.wav
      startVal [condition] = $popped==True
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    SoundComponent coin_sound
      sound [set every repeat] = coin_22050Hz_long.wav
      startVal [condition] = $popped==False
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  Routine instructions
    TextComponent instruction_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Now you're going to see 30 balloons, one after another, on the screen. For each balloon, you will press the SPACE key to pump up the balloon. Each press on the SPACE key pumps the balloon up a little more.

        BUT remember, balloons pop if you pump them up too much. It is up to you to decide how much to pump up each balloon. Some of these balloons might pop after just one pump. Others might not pop until they fill the whole screen.

        You get MONEY for every pump. Each pump earns 1 cent. But if a balloon pops, you lose the money you earned on that balloon. To keep the money from a balloon, stop pumping before it pops and press the ENTER key to collect the cash for this balloon.

        After each time you collect the cash or pop a balloon, a new balloon will appear.

        At the end of the experiment, you will be paid the amount earned on the game.

        Press a to advance.
    KeyboardComponent instruction_resp
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent instructions_code
      Code Type = Auto->JS
      Before Experiment:
        '''
        This BART is created by Jonanthan Peirce and made available on OSF https://osf.io/jfxsr/.
        Date created: 2016-05-04 03:49 AM | Last Updated: 2019-09-12 02:32 AM

        Category:  Project

        Description: A simple version of the Balloon Analog Risk Task (BART) written in PsychoPy.

        Evaluation of a behavioral measure of risk taking: The Balloon Analogue Risk Task (BART).
        Lejuez, C. W.; Read, J. P.; Kahler, C. W.; Richards, J. B.; Ramsey, S. E.; Stuart, G. L.; Strong, D. R.; Brown, R. A.
        Journal of Experimental Psychology: Applied, Vol 8(2), Jun 2002, 75-84. http://dx.doi.org/10.1037/1076-898X.8.2.75

        It is later edited by Xi Yang for Oregon Sleep Lab from 3/30/22 to 8/12/22.
        Xi incorporated more ideas from the version used in Dr. Brant Hasler's lab (including the stimuli list and cashing out animation and sound effects).

        '''
      Before JS Experiment:
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        Evaluation of a behavioral measure of risk taking: The Balloon Analogue Risk Task (BART).
        Lejuez, C. W.; Read, J. P.; Kahler, C. W.; Richards, J. B.; Ramsey, S. E.; Stuart, G. L.; Strong, D. R.; Brown, R. A.
        Journal of Experimental Psychology: Applied, Vol 8(2), Jun 2002, 75-84. http://dx.doi.org/10.1037/1076-898X.8.2.75

        It is later edited by Xi Yang for Oregon Sleep Lab from 3/30/22 to 8/12/22.
        Xi incorporated more ideas from the version used in Dr. Brant Hasler's lab (including the stimuli list and cashing out animation and sound effects).
        */
  Routine example_instructions
    KeyboardComponent example_instructions_resp
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent bankedMsg_example
      letterHeight = 0.1
      pos = [-.5, 0.8]
      startVal [time (s)] = 0.0
      text [set every frame] = $"You have collected:\n $%.2f" %bankedEarnings
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    TextComponent reminderMsg_example
      letterHeight = 0.05
      pos = [.5, 0.8]
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to pump the balloon
        Press ENTER to collect this sum
    ImageComponent example_instructions_image
      image = redBalloon.png
      ori = 270
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent example_instruction_text3
      letterHeight = 0.08
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      text = When you finish viewing the example, press a to advance.
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  Routine feedback_win
    CodeComponent win_checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        coin = sound.Sound("coin.wav")
      Begin Routine:
        if popped==True:
          feedbackText="Oops! Lost that one!"
          bang.play()
        else:
            feedbackText="You collected $%.2f." %lastBalloonEarnings
            coin.play()
  Routine example_instruction
    TextComponent example_instruction_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Let's see an example of task.
        Ask the experimenter any questions you have!

        Press a to advance this page.
    KeyboardComponent example_instruction_key_resp
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check_instructions
    KeyboardComponent check_instructions_key_resp
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent check_instructioins_text
      letterHeight = .1
      startVal [time (s)] = 0.0
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      text:
        You just saw an example of the task.
        If you have no questions and are ready to begin the task,
        press a to advance.
  Routine start
    TextComponent start_text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text = BART
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    KeyboardComponent start_key_resp
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_text2
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = Press a to advance
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Flow
  Routine start
  Routine instructions
  Routine example_instruction
  Routine example_instructions
  Routine check_instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finalScore
